PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'opacity': u'0.1', u'n_square': u'64', u'lowest_opacity': u'0.02', u'probeFrames': u'4', u'participant': u'test', u'mask_dur': u'4', u'step_size': u'0.05', u'session': u'1', u'image_size': u'512'}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/%s/%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = calibration
  Screen = 1
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Routines
  Routine premask
    GratingComponent premasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = $mask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = (image_size/1.5,image_size/1.5)
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  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      text [set every repeat] = $resp_msg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = $blank_dur
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('opacity',opacity)

        #if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
        #    opacity += np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity > 1: opacity = 1
        #    #curr += np.random.choice([1,2,3],size=1)[0]
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
        #    opacity -= 0.1
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= 1
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
        #    opacity -= np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
        #    #if curr < 1: curr = 1

        if ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 0): # invisible and incorrect
            opacity += 2 * step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 1): # invisible and correct
            opacity += step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 0): # visible and incorrect
            opacity -= step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 1): # visible and correct
            opacity -= 2 * step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
    TextComponent visibility_message
      text = ?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visible
      correctAns = '1'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine intoPrepare
    TextComponent preparation
      text = +
      stopVal [duration (s)] = .2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = .2
      startVal [condition] = $preparation.status == FINISHED
      letterHeight = 0.1
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  Routine trial
    CodeComponent importing
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding('latin-1')
      Begin Routine:
        main_loop.addData("image_onset_time",globalClock.getTime() - startTime)
    ImageComponent presentation
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      image [set every repeat] = $PATH_english
      size = (image_size,image_size)
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  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        mask_dur = int(expInfo['mask_dur'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])
        session = int(expInfo['session'])
        step_size = float(expInfo['step_size'])

        curr = int(expInfo['probeFrames'])
        lowest_opacity = float(expInfo['lowest_opacity'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)

        np.random.seed(12345)
        masks = np.random.rand(n_square,n_square)*2 - 1

        # save corrections of trials of unconscious
        unconscious_trials = []
        # count unconscious trials
        n_unconscious = 0
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print('{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc))
  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_counter]
        main_loop.addData('jitter2',jitter2_delay_dur)
        jitter_counter += 1

        meanacc = main_loop.data['response.corr'].mean()


        msg_post = '{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc)
      End Routine:
        print('{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc))
    TextComponent post_jitter
      text [set every repeat] = $msg_post
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = mask_dur
      units = pix
      texture resolution = 512
      startVal [time (s)] = 0.0
      sf = None
      size = (image_size/1.5,image_size/1.5)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\data\calibration.csv
    loopType = random
    nReps = 10
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    conditions:
      [{'Category': u'animal', 'Mean_Familiarity': 4.4000000000000004, 'SD_Concreteness': 1.5307950004273383, 'Word': u'Abejorro', 'category': u'Living_Things', 'Mean_Arousal': 7.0789473684210531, 'Mean_Valence': 2.1315789473684208, 'SD_Familiarity': 2.4152294576982403, 'Length': 8, 'Frequency': 0.17999999999999999, 'PATH_spanish': u'../stimuli_figure/Bumblebee_es.jpeg', 'blank_dur': 0.68544574615513421, 'picked': True, 'English': u'Bumblebee', 'log_frequency': -1.7147984280919266, 'PATH_english': u'../stimuli_figure/Bumblebee_en.jpeg', 'Mean_Concreteness': 7.5199999999999996, 'SD_Arousal': 1.583386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,
      {'Category': u'animal', 'Mean_Familiarity': 4.2400000000000002, 'SD_Concreteness': 2.6223399220289245, 'Word': u'Almeja', 'category': u'Living_Things', 'Mean_Arousal': 3.4210526315789487, 'Mean_Valence': 4.9210526315789487, 'SD_Familiarity': 2.3853720883753127, 'Length': 6, 'Frequency': 0.54000000000000004, 'PATH_spanish': u'../stimuli_figure/Clam_es.jpeg', 'blank_dur': 0.41884699888001259, 'picked': True, 'English': u'Clam', 'log_frequency': -0.61618613942381706, 'PATH_english': u'../stimuli_figure/Clam_en.jpeg', 'Mean_Concreteness': 6.7199999999999998, 'SD_Arousal': 1.7496189383941527, 'SD_V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,
      {'Category': u'animal', 'Mean_Familiarity': 3.3199999999999998, 'SD_Concreteness': 1.943364779619789, 'Word': u'Asno', 'category': u'Living_Things', 'Mean_Arousal': 4.5263157894736841, 'Mean_Valence': 5.3157894736842106, 'SD_Familiarity': 2.3043437243605824, 'Length': 4, 'Frequency': 3.9300000000000002, 'PATH_spanish': u'../stimuli_figure/Donkey_es.jpeg', 'blank_dur': 0.37769405276055856, 'picked': True, 'English': u'Donkey', 'log_frequency': 1.3686394258811698, 'PATH_english': u'../stimuli_figure/Donkey_en.jpeg', 'Mean_Concreteness': 6.8799999999999999, 'SD_Arousal': 1.5894388284780532, 'SD_V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,
      {'Category': u'animal', 'Mean_Familiarity': 3.4399999999999999, 'SD_Concreteness': 1.920937271229854, 'Word': u'Babosa', 'category': u'Living_Things', 'Mean_Arousal': 5.0789473684210513, 'Mean_Valence': 2.1315789473684208, 'SD_Familiarity': 2.2000000000000002, 'Length': 6, 'Frequency': 0.35999999999999999, 'PATH_spanish': u'../stimuli_figure/Slug_es.jpeg', 'blank_dur': 0.41893273336037362, 'picked': True, 'English': u'Slug', 'log_frequency': -1.0216512475319814, 'PATH_english': u'../stimuli_figure/Slug_en.jpeg', 'Mean_Concreteness': 6.7599999999999998, 'SD_Arousal': 2.5296253215496805, 'SD_Val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
    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
