PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'n_square': u'64', u'opacity': u'0.1', u'lowest_opacity': u'0.1', u'probeFrames': u'4', u'participant': u'test', u'step_size': u'0.1', u'premask': u'4', u'session': u'1', u'image_size': u'512', u'postmask': u'4'}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Save csv file = True
  Data filename = 'data/%s/%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = experiment
  Screen = 1
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Routines
  Routine premask
    GratingComponent premasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = $premask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      text [set every repeat] = $resp_msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = $blank_dur
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('opacity',opacity)

        #if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
        #    opacity += np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity > 1: opacity = 1
        #    #curr += np.random.choice([1,2,3],size=1)[0]
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
        #    opacity -= 0.1
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= 1
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
        #    opacity -= np.random.choice([0.02, 0.04, 0.08],size = 1)[0]
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
        #    #if curr < 1: curr = 1

        if ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 0): # invisible and incorrect
            opacity += 2 * step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 1): # invisible and correct
            opacity += step_size
            unconscious_trials.append(temp_corr)
            n_unconscious += 1
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 0): # visible and incorrect
            opacity -= step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 1): # visible and correct
            opacity -= 2 * step_size
            if opacity < lowest_opacity: opacity = lowest_opacity
    TextComponent visibility_message
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visible
      correctAns = '1'
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine trial
    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
      Begin Routine:
        main_loop.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent presentation
      image [set every repeat] = $PATH_english
      startVal [time (s)] = 0.0
      units = pix
      size = $(image_size, image_size)
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
      texture resolution = 256
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  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])
        session = int(expInfo['session'])
        step_size = float(expInfo['step_size'])

        curr = int(expInfo['probeFrames'])
        lowest_opacity = float(expInfo['lowest_opacity'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)

        np.random.seed(12345)
        masks = np.random.rand(n_square,n_square)*2 - 1

        # save corrections of trials of unconscious
        unconscious_trials = []
        # count unconscious trials
        n_unconscious = 0
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      stopVal [duration (s)] = .3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = .1
      startVal [time (s)] = .3
      letterHeight = 0.1
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  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_counter]
        main_loop.addData('jitter2',jitter2_delay_dur)
        jitter_counter += 1

        meanacc = main_loop.data['response.corr'].mean()


        msg_post = '{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc)
      End Routine:
        print('{}/{}, mean unconscious = {:.2f},opacity = {:.1f},p(correct) = {:.2f}'.format(
                main_loop.thisN+1,main_loop.nTotal,
                n_unconscious/(main_loop.thisN+1),opacity,meanacc))
    TextComponent post_jitter
      text [set every repeat] = $msg_post
      stopVal [duration (s)] = $jitter2_delay_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      tex [set every repeat] = $masks
      stopVal [duration (frames)] = postmask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\experiment_csvs\session_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'object'), ('Word', 'Jeringa'), ('Mean_Valence', 2.0), ('SD_Valence', 1.2080808993852437), ('Mean_Arousal', 6.947368421052633), ('SD_Arousal', 1.6594914300903707), ('Mean_Familiarity', 3.56), ('SD_Familiarity', 2.3108440016582685), ('Mean_Concreteness', 6.4), ('SD_Concreteness', 2.565800719723442), ('Frequency', 1.07), ('Length', 7), ('English', 'Syringe'), ('log_frequency', 0.06765864847381486), ('picked', True), ('PATH', '../stimuli_figure/Syringe.jpeg'), ('blank_dur', 0.4645065889559096), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Pato'), ('Mean_Valence', 6.2368421052631575), ('SD_Valence', 1.282611578336145), ('Mean_Arousal', 3.763157894736842), ('SD_Arousal', 1.8950035374183023), ('Mean_Familiarity', 4.76), ('SD_Familiarity', 2.6814175355583845), ('Mean_Concreteness', 7.8), ('SD_Concreteness', 1.6329931618554518), ('Frequency', 4.82), ('Length', 4), ('English', 'Duck'), ('log_frequency', 1.572773928062509), ('picked', True), ('PATH', '../stimuli_figure/Duck.jpeg'), ('blank_dur', 0.496888170153366), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Misil'), ('Mean_Valence', 1.5526315789473684), ('SD_Valence', 0.7240041966823505), ('Mean_Arousal', 6.789473684210527), ('SD_Arousal', 1.9885876386486108), ('Mean_Familiarity', 3.6), ('SD_Familiarity', 2.3804761428476167), ('Mean_Concreteness', 7.8), ('SD_Concreteness', 1.3228756555322954), ('Frequency', 5.0), ('Length', 5), ('English', 'Missile'), ('log_frequency', 1.6094379124341005), ('picked', True), ('PATH', '../stimuli_figure/Missile.jpeg'), ('blank_dur', 0.4136258849875571), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Golondrina'), ('Mean_Valence', 6.315789473684211), ('SD_Valence', 1.3173532670307042), ('Mean_Arousal', 4.3421052631578965), ('SD_Arousal', 1.8347444890151736), ('Mean_Familiarity', 3.12), ('SD_Familiarity', 2.06801031589948), ('Mean_Concreteness', 7.16), ('SD_Concreteness', 1.4047538337136969), ('Frequency', 2.32), ('Length', 10), ('English', 'Swallow'), ('log_frequency', 0.8415671856782185), ('picked', True), ('PATH', '../stimuli_figure/Swallow.jpeg'), ('blank_dur', 0.6907175139430841), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Refiner\xe9\x93\x86a'), ('Mean_Valence', 3.6216216216216215), ('SD_Valence', 1.9054213787586805), ('Mean_Arousal', 4.351351351351353), ('SD_Arousal', 2.440585269245157), ('Mean_Familiarity', 3.6), ('SD_Familiarity', 2.9580398915498085), ('Mean_Concreteness', 6.96), ('SD_Concreteness', 2.3000000000000003), ('Frequency', 0.89), ('Length', 9), ('English', 'Refinery'), ('log_frequency', -0.11653381625595152), ('picked', True), ('PATH', '../stimuli_figure/Refinery.jpeg'), ('blank_dur', 0.694426754065328), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Almeja'), ('Mean_Valence', 4.921052631578949), ('SD_Valence', 1.6986732334124204), ('Mean_Arousal', 3.4210526315789487), ('SD_Arousal', 1.7496189383941527), ('Mean_Familiarity', 4.24), ('SD_Familiarity', 2.3853720883753127), ('Mean_Concreteness', 6.72), ('SD_Concreteness', 2.6223399220289245), ('Frequency', 0.54), ('Length', 6), ('English', 'Clam'), ('log_frequency', -0.6161861394238171), ('picked', True), ('PATH', '../stimuli_figure/Clam.jpeg'), ('blank_dur', 0.35022490885271323), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Machete'), ('Mean_Valence', 2.473684210526316), ('SD_Valence', 1.720101224319696), ('Mean_Arousal', 6.026315789473684), ('SD_Arousal', 2.1115748203428915), ('Mean_Familiarity', 3.12), ('SD_Familiarity', 2.3860706890897707), ('Mean_Concreteness', 7.56), ('SD_Concreteness', 1.1210114480533506), ('Frequency', 1.79), ('Length', 7), ('English', 'Machete'), ('log_frequency', 0.5822156198526637), ('picked', True), ('PATH', '../stimuli_figure/Machete.jpeg'), ('blank_dur', 0.6895565688745078), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Br\xe7\x85\xa4jula'), ('Mean_Valence', 5.105263157894737), ('SD_Valence', 1.5385053063037817), ('Mean_Arousal', 4.0), ('SD_Arousal', 1.9312508199945781), ('Mean_Familiarity', 3.84), ('SD_Familiarity', 2.230097157823697), ('Mean_Concreteness', 7.84), ('SD_Concreteness', 1.106044001535802), ('Frequency', 2.5), ('Length', 7), ('English', 'Compass'), ('log_frequency', 0.9162907318741552), ('picked', True), ('PATH', '../stimuli_figure/Compass.jpeg'), ('blank_dur', 0.4770215125454299), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Cebra'), ('Mean_Valence', 5.7105263157894735), ('SD_Valence', 1.4502170338382827), ('Mean_Arousal', 5.026315789473684), ('SD_Arousal', 1.731845478801922), ('Mean_Familiarity', 4.16), ('SD_Familiarity', 2.718455443813637), ('Mean_Concreteness', 7.52), ('SD_Concreteness', 2.2568414506414345), ('Frequency', 0.89), ('Length', 5), ('English', 'Zebra'), ('log_frequency', -0.11653381625595152), ('picked', True), ('PATH', '../stimuli_figure/Zebra.jpeg'), ('blank_dur', 0.6780495164580831), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Arco'), ('Mean_Valence', 4.842105263157895), ('SD_Valence', 1.3259635107586647), ('Mean_Arousal', 4.052631578947368), ('SD_Arousal', 1.7076515946484954), ('Mean_Familiarity', 4.08), ('SD_Familiarity', 2.4650895859312425), ('Mean_Concreteness', 6.2), ('SD_Concreteness', 2.2546248764114467), ('Frequency', 22.86), ('Length', 4), ('English', 'Arc'), ('log_frequency', 3.1293886583666644), ('picked', True), ('PATH', '../stimuli_figure/Arc.jpeg'), ('blank_dur', 0.4242043722587088), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Culebra'), ('Mean_Valence', 1.8157894736842104), ('SD_Valence', 1.1821936357122866), ('Mean_Arousal', 7.578947368421053), ('SD_Arousal', 1.5357290538648978), ('Mean_Familiarity', 3.88), ('SD_Familiarity', 2.350886357667394), ('Mean_Concreteness', 7.32), ('SD_Concreteness', 1.5470401847829731), ('Frequency', 2.32), ('Length', 7), ('English', 'Snake'), ('log_frequency', 0.8415671856782185), ('picked', True), ('PATH', '../stimuli_figure/Snake.jpeg'), ('blank_dur', 0.5720166951302303), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Lince'), ('Mean_Valence', 6.894736842105262), ('SD_Valence', 1.3313166351136376), ('Mean_Arousal', 6.657894736842105), ('SD_Arousal', 1.7285569014623643), ('Mean_Familiarity', 3.6), ('SD_Familiarity', 2.179449471770337), ('Mean_Concreteness', 6.76), ('SD_Concreteness', 2.1268129521265693), ('Frequency', 1.25), ('Length', 5), ('English', 'Lynx'), ('log_frequency', 0.22314355131420974), ('picked', True), ('PATH', '../stimuli_figure/Lynx.jpeg'), ('blank_dur', 0.4430948891756056), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Alambre'), ('Mean_Valence', 3.263157894736842), ('SD_Valence', 1.605467188488873), ('Mean_Arousal', 4.026315789473684), ('SD_Arousal', 2.1496302900890374), ('Mean_Familiarity', 3.64), ('SD_Familiarity', 2.0591260281974), ('Mean_Concreteness', 7.4), ('SD_Concreteness', 1.3228756555322954), ('Frequency', 4.64), ('Length', 7), ('English', 'Wire'), ('log_frequency', 1.534714366238164), ('picked', True), ('PATH', '../stimuli_figure/Wire.jpeg'), ('blank_dur', 0.6209612541298068), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Orangut\xe8\xb0\xa9n'), ('Mean_Valence', 5.5), ('SD_Valence', 1.955587974069263), ('Mean_Arousal', 5.973684210526316), ('SD_Arousal', 1.9657450565400183), ('Mean_Familiarity', 3.16), ('SD_Familiarity', 2.173323108360405), ('Mean_Concreteness', 8.0), ('SD_Concreteness', 1.6329931618554518), ('Frequency', 1.07), ('Length', 9), ('English', 'Orangutan'), ('log_frequency', 0.06765864847381486), ('picked', True), ('PATH', '../stimuli_figure/Orangutan.jpeg'), ('blank_dur', 0.6722861990870898), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Hamaca'), ('Mean_Valence', 7.0), ('SD_Valence', 1.506741607001768), ('Mean_Arousal', 3.3157894736842106), ('SD_Arousal', 2.267338756243072), ('Mean_Familiarity', 4.28), ('SD_Familiarity', 2.622339922028925), ('Mean_Concreteness', 7.88), ('SD_Concreteness', 1.3940349110884338), ('Frequency', 2.5), ('Length', 6), ('English', 'Hammock'), ('log_frequency', 0.9162907318741552), ('picked', True), ('PATH', '../stimuli_figure/Hammock.jpeg'), ('blank_dur', 0.36650836555215016), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Ciervo'), ('Mean_Valence', 6.526315789473684), ('SD_Valence', 1.2021791498743444), ('Mean_Arousal', 4.868421052631579), ('SD_Arousal', 1.7269102643641998), ('Mean_Familiarity', 3.24), ('SD_Familiarity', 2.259793500890439), ('Mean_Concreteness', 7.32), ('SD_Concreteness', 1.9941581348194704), ('Frequency', 1.79), ('Length', 6), ('English', 'Deer'), ('log_frequency', 0.5822156198526637), ('picked', True), ('PATH', '../stimuli_figure/Deer.jpeg'), ('blank_dur', 0.356584433268876), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Babosa'), ('Mean_Valence', 2.131578947368421), ('SD_Valence', 1.3390406535939228), ('Mean_Arousal', 5.078947368421051), ('SD_Arousal', 2.5296253215496805), ('Mean_Familiarity', 3.44), ('SD_Familiarity', 2.2), ('Mean_Concreteness', 6.76), ('SD_Concreteness', 1.920937271229854), ('Frequency', 0.36), ('Length', 6), ('English', 'Slug'), ('log_frequency', -1.0216512475319814), ('picked', True), ('PATH', '../stimuli_figure/Slug.jpeg'), ('blank_dur', 0.4926109638741841), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Patinete'), ('Mean_Valence', 5.7105263157894735), ('SD_Valence', 1.7692248224184892), ('Mean_Arousal', 5.105263157894737), ('SD_Arousal', 1.969901543488508), ('Mean_Familiarity', 3.52), ('SD_Familiarity', 2.181742422927143), ('Mean_Concreteness', 6.84), ('SD_Concreteness', 1.6753109164172073), ('Frequency', 0.18), ('Length', 8), ('English', 'Scooter'), ('log_frequency', -1.7147984280919266), ('picked', True), ('PATH', '../stimuli_figure/Scooter.jpeg'), ('blank_dur', 0.3395414379077053), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Cometa'), ('Mean_Valence', 6.315789473684211), ('SD_Valence', 1.416223817207838), ('Mean_Arousal', 5.184210526315789), ('SD_Arousal', 1.7375855126986577), ('Mean_Familiarity', 4.88), ('SD_Familiarity', 2.471841418861654), ('Mean_Concreteness', 7.24), ('SD_Concreteness', 1.8321208111548388), ('Frequency', 7.5), ('Length', 6), ('English', 'Kite'), ('log_frequency', 2.0149030205422647), ('picked', True), ('PATH', '../stimuli_figure/Kite.jpeg'), ('blank_dur', 0.6091721148344669), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Cocodrilo'), ('Mean_Valence', 4.631578947368421), ('SD_Valence', 1.93713430908564), ('Mean_Arousal', 6.605263157894738), ('SD_Arousal', 1.823858008997508), ('Mean_Familiarity', 4.52), ('SD_Familiarity', 2.5839246635044657), ('Mean_Concreteness', 7.88), ('SD_Concreteness', 1.4525839046333966), ('Frequency', 3.21), ('Length', 9), ('English', 'Crocodile'), ('log_frequency', 1.1662709371419244), ('picked', True), ('PATH', '../stimuli_figure/Crocodile.jpeg'), ('blank_dur', 0.6030256864678628), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', '\xe8\x84\x95guila'), ('Mean_Valence', 6.157894736842105), ('SD_Valence', 1.5513954623216122), ('Mean_Arousal', 6.0), ('SD_Arousal', 1.6765472885698187), ('Mean_Familiarity', 4.32), ('SD_Familiarity', 2.4447222064411878), ('Mean_Concreteness', 7.36), ('SD_Concreteness', 1.8), ('Frequency', 7.86), ('Length', 6), ('English', 'Eagle'), ('log_frequency', 2.0617866064411148), ('picked', True), ('PATH', '../stimuli_figure/Eagle.jpeg'), ('blank_dur', 0.40634409019617457), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Ladrillo'), ('Mean_Valence', 4.2368421052631575), ('SD_Valence', 1.4965584036303192), ('Mean_Arousal', 3.3157894736842106), ('SD_Arousal', 1.817412225590012), ('Mean_Familiarity', 4.96), ('SD_Familiarity', 2.5735837529276826), ('Mean_Concreteness', 6.6), ('SD_Concreteness', 1.9578900207451213), ('Frequency', 8.04), ('Length', 8), ('English', 'Brick'), ('log_frequency', 2.0844290831908747), ('picked', True), ('PATH', '../stimuli_figure/Brick.jpeg'), ('blank_dur', 0.6857961239735098), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Ametralladora'), ('Mean_Valence', 1.4473684210526316), ('SD_Valence', 0.8913205635931025), ('Mean_Arousal', 7.315789473684211), ('SD_Arousal', 2.067839493456156), ('Mean_Familiarity', 3.6), ('SD_Familiarity', 2.3273733406281565), ('Mean_Concreteness', 6.84), ('SD_Concreteness', 2.321637353248779), ('Frequency', 0.08), ('Length', 13), ('English', 'Machine gun'), ('log_frequency', -2.525728644308256), ('picked', True), ('PATH', '../stimuli_figure/Machine gun.jpeg'), ('blank_dur', 0.6716018952169802), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'L\xe8\xb0\xa9tigo'), ('Mean_Valence', 3.0526315789473686), ('SD_Valence', 1.7850333999608572), ('Mean_Arousal', 5.815789473684211), ('SD_Arousal', 1.7219609054465201), ('Mean_Familiarity', 3.32), ('SD_Familiarity', 2.3043437243605824), ('Mean_Concreteness', 7.72), ('SD_Concreteness', 1.5143755588800725), ('Frequency', 4.46), ('Length', 6), ('English', 'Whip'), ('log_frequency', 1.4951487660319729), ('picked', True), ('PATH', '../stimuli_figure/Whip.jpeg'), ('blank_dur', 0.4297619487976969), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Ping\xe7\x9c\x89ino'), ('Mean_Valence', 7.0), ('SD_Valence', 1.506741607001768), ('Mean_Arousal', 4.947368421052632), ('SD_Arousal', 2.2773546581452395), ('Mean_Familiarity', 4.0), ('SD_Familiarity', 2.6770630673681683), ('Mean_Concreteness', 7.04), ('SD_Concreteness', 2.051016008388688), ('Frequency', 1.96), ('Length', 8), ('English', 'Penguin'), ('log_frequency', 0.6729444732424258), ('picked', True), ('PATH', '../stimuli_figure/Penguin.jpeg'), ('blank_dur', 0.5994736886779646), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Mono'), ('Mean_Valence', 6.342105263157895), ('SD_Valence', 1.64852621796649), ('Mean_Arousal', 5.684210526315789), ('SD_Arousal', 2.041531793185916), ('Mean_Familiarity', 4.24), ('SD_Familiarity', 2.2412793965352322), ('Mean_Concreteness', 6.28), ('SD_Concreteness', 1.6713268182295562), ('Frequency', 18.21), ('Length', 4), ('English', 'Monkey'), ('log_frequency', 2.901970893739517), ('picked', True), ('PATH', '../stimuli_figure/Monkey.jpeg'), ('blank_dur', 0.49362509006778904), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Camello'), ('Mean_Valence', 5.815789473684211), ('SD_Valence', 1.5041431637924283), ('Mean_Arousal', 4.868421052631579), ('SD_Arousal', 1.9054835894898383), ('Mean_Familiarity', 4.28), ('SD_Familiarity', 2.622339922028925), ('Mean_Concreteness', 7.56), ('SD_Concreteness', 1.293573860795485), ('Frequency', 2.32), ('Length', 7), ('English', 'Camel'), ('log_frequency', 0.8415671856782185), ('picked', True), ('PATH', '../stimuli_figure/Camel.jpeg'), ('blank_dur', 0.6761707371938879), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Soplete'), ('Mean_Valence', 3.763157894736842), ('SD_Valence', 1.618043705792556), ('Mean_Arousal', 4.842105263157895), ('SD_Arousal', 2.0205206151355566), ('Mean_Familiarity', 3.9166666666666665), ('SD_Familiarity', 2.7491764247666524), ('Mean_Concreteness', 7.4), ('SD_Concreteness', 1.5275252316519468), ('Frequency', 2.5), ('Length', 7), ('English', 'Blowtorch'), ('log_frequency', 0.9162907318741552), ('picked', True), ('PATH', '../stimuli_figure/Blowtorch.jpeg'), ('blank_dur', 0.3265927378113443), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Asno'), ('Mean_Valence', 5.315789473684211), ('SD_Valence', 1.6942711604969272), ('Mean_Arousal', 4.526315789473684), ('SD_Arousal', 1.5894388284780532), ('Mean_Familiarity', 3.32), ('SD_Familiarity', 2.3043437243605824), ('Mean_Concreteness', 6.88), ('SD_Concreteness', 1.943364779619789), ('Frequency', 3.93), ('Length', 4), ('English', 'Donkey'), ('log_frequency', 1.3686394258811698), ('picked', True), ('PATH', '../stimuli_figure/Donkey.jpeg'), ('blank_dur', 0.5845153283008753), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Escarabajo'), ('Mean_Valence', 3.3684210526315788), ('SD_Valence', 1.683321244598838), ('Mean_Arousal', 4.552631578947368), ('SD_Arousal', 2.2862381283489173), ('Mean_Familiarity', 3.36), ('SD_Familiarity', 1.8), ('Mean_Concreteness', 7.52), ('SD_Concreteness', 1.5307950004273383), ('Frequency', 1.43), ('Length', 10), ('English', 'Beetle'), ('log_frequency', 0.3576744442718159), ('picked', True), ('PATH', '../stimuli_figure/Beetle.jpeg'), ('blank_dur', 0.3994516770315879), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Bengala'), ('Mean_Valence', 4.657894736842105), ('SD_Valence', 1.75955024642699), ('Mean_Arousal', 6.13157894736842), ('SD_Arousal', 1.5451939899481344), ('Mean_Familiarity', 3.16), ('SD_Familiarity', 1.8636880997992489), ('Mean_Concreteness', 7.08), ('SD_Concreteness', 1.5790292376436004), ('Frequency', 1.07), ('Length', 7), ('English', 'Bengal'), ('log_frequency', 0.06765864847381486), ('picked', True), ('PATH', '../stimuli_figure/Bengal.jpeg'), ('blank_dur', 0.4793428504331507), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Alfombra'), ('Mean_Valence', 5.026315789473684), ('SD_Valence', 1.1965455256191009), ('Mean_Arousal', 2.9210526315789487), ('SD_Arousal', 1.8215167268911472), ('Mean_Familiarity', 4.84), ('SD_Familiarity', 1.9723082923316024), ('Mean_Concreteness', 7.44), ('SD_Concreteness', 2.1617893822787955), ('Frequency', 16.07), ('Length', 8), ('English', 'Carpet'), ('log_frequency', 2.776954179749421), ('picked', True), ('PATH', '../stimuli_figure/Carpet.jpeg'), ('blank_dur', 0.4353028058083288), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Gaviota'), ('Mean_Valence', 5.0), ('SD_Valence', 1.9864405216230223), ('Mean_Arousal', 5.026315789473684), ('SD_Arousal', 1.9240559932469117), ('Mean_Familiarity', 4.36), ('SD_Familiarity', 2.325224003546038), ('Mean_Concreteness', 7.92), ('SD_Concreteness', 1.5524174696260014), ('Frequency', 2.5), ('Length', 7), ('English', 'Seagull'), ('log_frequency', 0.9162907318741552), ('picked', True), ('PATH', '../stimuli_figure/Seagull.jpeg'), ('blank_dur', 0.6335324363714059), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Desag\xe7\x9c\x89e'), ('Mean_Valence', 2.9473684210526314), ('SD_Valence', 1.4877403221002128), ('Mean_Arousal', 4.078947368421051), ('SD_Arousal', 1.8362944318377408), ('Mean_Familiarity', 3.88), ('SD_Familiarity', 2.333095225946282), ('Mean_Concreteness', 7.36), ('SD_Concreteness', 1.380821011813865), ('Frequency', 1.07), ('Length', 7), ('English', 'Drain'), ('log_frequency', 0.06765864847381486), ('picked', True), ('PATH', '../stimuli_figure/Drain.jpeg'), ('blank_dur', 0.3688581622112192), ('category', 'Nonliving_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Gallina'), ('Mean_Valence', 4.578947368421051), ('SD_Valence', 1.2221288238233792), ('Mean_Arousal', 4.605263157894737), ('SD_Arousal', 1.6030287833434544), ('Mean_Familiarity', 4.64), ('SD_Familiarity', 2.6280537792569363), ('Mean_Concreteness', 6.92), ('SD_Concreteness', 2.3259406699226006), ('Frequency', 13.04), ('Length', 7), ('English', 'Hen'), ('log_frequency', 2.5680215564985067), ('picked', True), ('PATH', '../stimuli_figure/Hen.jpeg'), ('blank_dur', 0.6461740608013807), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Faja'), ('Mean_Valence', 3.684210526315789), ('SD_Valence', 1.6620609667468578), ('Mean_Arousal', 3.842105263157895), ('SD_Arousal', 1.808782116612434), ('Mean_Familiarity', 3.96), ('SD_Familiarity', 2.4913182588073064), ('Mean_Concreteness', 7.041666666666668), ('SD_Concreteness', 1.3344650993747542), ('Frequency', 2.32), ('Length', 4), ('English', 'Belt'), ('log_frequency', 0.8415671856782185), ('picked', True), ('PATH', '../stimuli_figure/Belt.jpeg'), ('blank_dur', 0.4318102199489893), ('category', 'Nonliving_Things')])]
    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine jitter1
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
